PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = FinalProjectExp
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size [set every repeat] = (30, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      units = pix
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    ImageComponent imagestim
      image [set every repeat] = $Image
      size = (230, 120)
      startVal [time (s)] = 1
      units = pix
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'a','h'
      correctAns = $Corr_Resp
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condfinalA.xlsx
    loopType = fullRandom
    nReps = 5
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    conditions:
      [{'Image': '7.png', 'Corr_Resp': 'h', 'IV': 'Congruent', 'NumStimuli': 3.0, 'EmotionType': 'Happy '},
      {'Image': '9.png', 'Corr_Resp': 'h', 'IV': 'Congruent', 'NumStimuli': 5.0, 'EmotionType': 'Happy '},
      {'Image': '11.png', 'Corr_Resp': 'h', 'IV': 'Congruent', 'NumStimuli': 7.0, 'EmotionType': 'Happy '},
      {'Image': '1.png', 'Corr_Resp': 'a', 'IV': 'Congruent', 'NumStimuli': 3.0, 'EmotionType': 'angry'},
      {'Image': '3.png', 'Corr_Resp': 'a', 'IV': 'Congruent', 'NumStimuli': 5.0, 'EmotionType': 'angry'},
      {'Image': '5.png', 'Corr_Resp': 'a', 'IV': 'Congruent', 'NumStimuli': 7.0, 'EmotionType': 'angry'},
      {'Image': '8.png', 'Corr_Resp': 'h', 'IV': 'Incongruent ', 'NumStimuli': 3.0, 'EmotionType': 'Happy '},
      {'Image': '10.png', 'Corr_Resp': 'h', 'IV': 'Incongruent ', 'NumStimuli': 5.0, 'EmotionType': 'Happy '},
      {'Image': '12.png', 'Corr_Resp': 'h', 'IV': 'Incongruent ', 'NumStimuli': 7.0, 'EmotionType': 'Happy '},
      {'Image': '2.png', 'Corr_Resp': 'a', 'IV': 'Incongruent ', 'NumStimuli': 3.0, 'EmotionType': 'angry'},
      {'Image': '4.png', 'Corr_Resp': 'a', 'IV': 'Incongruent ', 'NumStimuli': 5.0, 'EmotionType': 'angry'},
      {'Image': '6.png', 'Corr_Resp': 'a', 'IV': 'Incongruent ', 'NumStimuli': 7.0, 'EmotionType': 'angry'}]
    Routine trial
  LoopTerminator trials
